PsychoPy2experiment version="2023.2.1"
Settings
  Audio lib = ptb
  Completed URL = $"https://chkhaidze.ucsd.edu/questionnaires/questionnaires_wm.html?sona_id=2554&subject_id="+expInfo['participant']
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['resources/taskPhases_0.csv', 'resources/taskPhases_1.csv', 'resources/taskPhases_list.csv']
  Screen = 1
  Units = height
  Window size (pixels) = [3200, 1800]
  expName = WM_Deepgen
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine memoranda
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    ImageComponent left_stim
      image [set every repeat] = $left_img
      pos = (-.35, 0)
      size = (0.35, 0.35)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = cue_time
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    ImageComponent right_stim
      image [set every repeat] = $right_img
      pos = (.35,0)
      size = (0.35, 0.35)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = cue_time
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    TextComponent fixation_cross_5
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = cue_time
      text = +
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    CodeComponent code_18
      Code Type = JS
      Begin JS Routine:
        //console.log(loop_trials.thisN);

        console.log(loop_numbers);
  Routine isi1
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    TextComponent fixation_cross
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = delay_1_time
      text = +
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  Routine reliability_cue
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    PolygonComponent fill_rectangle
      fillColor = 0.0000, 0.0000, 0.0000
      lineWidth = 2
      shape = rectangle
      size [set every repeat] = (rec_length, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = reliability_time
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    PolygonComponent right_cue
      fillColor = white
      pos [set every repeat] = (right_cue_offset, 0)
      shape = rectangle
      size [set every repeat] = (right_cue_length, 0.049)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = reliability_time
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    PolygonComponent left_cue
      fillColor = white
      pos [set every repeat] = (left_cue_offset, 0)
      shape = rectangle
      size [set every repeat] = (left_cue_length, 0.049)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = reliability_time
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    PolygonComponent dividing_line
      fillColor = 0.3255, 0.3255, 0.3255
      lineColor = 0.3255, 0.3255, 0.3255
      lineWidth = 2
      ori = 90
      shape = line
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = reliability_time
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  Routine isi2
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    TextComponent fixation_cross2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = delay_2_time
      text = +
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  Routine ping
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    ImageComponent ping_im
      image [set every repeat] = $ping_img
      size = (0.35, 0.35)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = ping_im_flash1
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    TextComponent fixation_cross2_2
      letterHeight = 0.05
      startVal [time (s)] = .2
      stopVal [duration (s)] = ping_im_flash2
      text = +
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    ImageComponent ping_im_2
      image [set every repeat] = $ping_img
      size = (0.35, 0.35)
      startVal [time (s)] = .4
      stopVal [duration (s)] = ping_im_flash3
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    TextComponent fixation_cross2_3
      letterHeight = 0.05
      startVal [time (s)] = .6
      stopVal [duration (s)] = ping_im_flash4
      text = +
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    ImageComponent ping_im_3
      image [set every repeat] = $ping_img
      size = (0.35, 0.35)
      startVal [time (s)] = .8
      stopVal [duration (s)] = ping_im_flash5
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  Routine noise_mask
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    ImageComponent noise_mask_im
      image = stimuli/noise_mask.png
      size = (0.35, 0.35)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = noise_mask_time
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  Routine isi3
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    TextComponent fixation_cross_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = delay_3_time
      text = +
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  Routine probe
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    PolygonComponent picker
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = -1.0000, -1.0000, -1.0000
      lineWidth = 10
      pos = (2, 2)
      shape = rectangle
      size = (0.26, 0.26)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = probe_time
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    ImageComponent distractor_mem_stim
      image [set every repeat] = $distractor_stim
      pos [set every repeat] = (dismem_x, dismem_y)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = probe_time
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    ImageComponent memoranda_stim
      image [set every repeat] = $mem_stim
      pos [set every repeat] = (mem_x, mem_y)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = probe_time
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    ImageComponent distractor_im_0
      image [set every repeat] = $distractor_0
      pos [set every repeat] = (dis0_x, dis0_y)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = probe_time
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    ImageComponent distractor_im_1
      image [set every repeat] = $distractor_1
      pos [set every repeat] = (dis1_x, dis1_y)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = probe_time
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    ImageComponent distractor_im_2
      image [set every repeat] = $distractor_2
      pos [set every repeat] = (dis2_x, dis2_y)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = probe_time
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    ImageComponent distractor_im_3
      image [set every repeat] = $distractor_3
      pos [set every repeat] = (dis3_x, dis3_y)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = probe_time
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    MouseComponent mouse
      clickable = memoranda_stim, distractor_mem_stim, distractor_im_0, distractor_im_1, distractor_im_2, distractor_im_3
      forceEndRoutineOnPress = never
      saveMouseState = on click
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = probe_time
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    ImageComponent mem_cue
      image [set every repeat] = $cue_img
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = probe_time
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    TextComponent text_24
      letterHeight = 0.03
      pos = (0, .09)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = probe_time
      text [set every repeat] = instruct_guide_txt
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    CodeComponent code_2
      Code Type = JS
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      Begin JS Routine:
        //show mouse
        document.body.style.cursor='auto'

        //picker outline
        picker.pos= [2,2];
        picker.setAutoDraw(true);

        correct = 0;

        if (probe_direction == 'right' && taskPhase == 'intro') {
            guide_text = "Click on the stimulus that was presented on the right side";
        }
        else if (probe_direction == 'left' && taskPhase == 'intro'){
          guide_text = "Click on the stimulus that was presented on the left side";
         }
        else {
           guide_text = " ";
         };
        text_24.text = guide_text
      Each JS Frame:
        options = [memoranda_stim, distractor_mem_stim, distractor_im_0, distractor_im_1, distractor_im_2, distractor_im_3];

        for (let i = 0; i < options.length; i++) {

            if (mouse.isPressedIn(options[i], [0])) {

                picker.pos= options[i].pos;
                picker.setAutoDraw(true);

                //note this should update correct to be whatevr was chosen last
                if (mouse.isPressedIn(memoranda_stim, [0])) {
                    correct = 1;
                   }
                else {
                    correct = 0;
                 };

            };

         };
      End JS Routine:
        document.body.style.cursor='none';


        psychoJS.experiment.addData("resp_correct",correct);
        psychoJS.experiment.addData("taskPhase",taskPhase);
        mean_performance.push(correct);
  Routine ITI
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    TextComponent fixation_iti
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = iti_dur
      text = +
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  Routine initial_wait
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    TextComponent fixation_cross_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = +
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    CodeComponent code_19
      Code Type = JS
      Begin JS Routine:
        loop_numbers = 0;
  Routine end_exp
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    TextComponent thanks
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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      text:
        Thank you for your participation!

        This page will redirect back to complete a short survey.
  Routine probe_2
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  Routine setup_js
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    CodeComponent code
      Code Type = JS
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      Begin JS Experiment:
        // inserted the crib sheet stuff
        thisExp=psychoJS.experiment;
        win=psychoJS.window;
        event=psychoJS.eventManager;


        //hide mouse
        document.body.style.cursor='none'

        //exit if on mobile
        if( /Android|webOS|iPhone|iPad|iPod|BlackBerry|IEMobile|Opera Mini/i.test(navigator.userAgent) ) {
          quitPsychoJS('Mobile device detected. Goodbye!', false)
        }
      End JS Experiment:
        document.body.style.cursor='auto'
  Routine block_break
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    TextComponent break_txt
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = take_break_txt
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_3
      Code Type = JS
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      Begin JS Routine:
        trialCount = trialCount+1;
        remaining_blocks = breakTrials.length - block_count;

        loop_numbers = loop_numbers + 1;

        if (loop_numbers == 300) {
            continueRoutine = false;
            loop_trials.finished = true;
            repeat_practice.finished = true;
            demo_prac_task.finished = true;
            trials_3.finished = true;
        };



        //skip break if it's not a break trial
        if (breakTrials.indexOf(trialCount) == -1) {
            continueRoutine = false;
        }
        else {
            //otherwise update break text
            block_count =  block_count + 1;
            break_txt.text = "You can now take a short break.\n\n Please keep your break under 5 minutes. \n\n There are " + remaining_blocks.toString() + " blocks left. \n\n When you are ready, press 'SPACE' to resume the experiment.";
        };

        //flag_for_loop = 1;
      Each JS Frame:
        //if (loop_trials.thisN == 1) {
        //    continueRoutine = false;
        //    trials_3.finished = true;
        //};
  Routine intro_txt
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    TextComponent text_19
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $introTXT
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    KeyboardComponent key_resp_11
      allowedKeys = 'y'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_4
      Code Type = JS
      Begin JS Routine:
        task_errors = []
        trialCount=0;
        breakTrials = [30,60,90,120,150,180,210,240,270];

        block_count = 0;
  Routine Instructions2
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Please perform the experiment in full-screen mode until the experiment concludes. If you would like to discontinue participation, you may press the 'escape' key and the experiment will terminate.

        You can avoid uninentionally ending the experiment by remaining in full-screen mode, even during breaks.
    KeyboardComponent key_resp_3
      allowedKeys = 'y'
      forceEndRoutine = True
      startVal [time (s)] = 1
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    TextComponent text_3
      letterHeight = 0.05
      pos = (0, -.35)
      startVal [time (s)] = 1
      text = [Press the "y" key to continue]
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  Routine Instructions1
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    TextComponent text1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Welcome to the experiment! Please read the following instructions carefully. You will see a demo of the task first, so do not worry if you do not understand the task right away.
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    KeyboardComponent key_resp_2
      allowedKeys = 'y'
      forceEndRoutine = True
      startVal [time (s)] = 1
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    TextComponent text
      letterHeight = 0.05
      pos = (0, -.35)
      startVal [time (s)] = 1
      text = [Press the "y" key to continue]
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    CodeComponent code_17
      Code Type = JS
      Begin JS Experiment:
        //task_file_name = $'resources/taskPhases_'+str(random_id)+'.csv';
      Begin JS Routine:
        psychoJS._serverManager.prepareResources([
        { name: ('./resources/taskPhases_0.csv'), path: ('./resources/taskPhases_0.csv') },
        { name: ('./resources/taskPhases_1.csv'), path: ('./resources/taskPhases_1.csv') },
        { name: ('./resources/taskPhases_2.csv'), path: ('./resources/taskPhases_2.csv') },
        { name: ('./resources/taskPhases_3.csv'), path: ('./resources/taskPhases_3.csv') },
        { name: ('./resources/taskPhases_4.csv'), path: ('./resources/taskPhases_4.csv') },
        { name: ('./resources/taskPhases_5.csv'), path: ('./resources/taskPhases_5.csv') },
        { name: ('./resources/taskPhases_6.csv'), path: ('./resources/taskPhases_6.csv') },
        { name: ('./resources/taskPhases_7.csv'), path: ('./resources/taskPhases_7.csv') },
        { name: ('./resources/taskPhases_8.csv'), path: ('./resources/taskPhases_8.csv') },
        { name: ('./resources/taskPhases_9.csv'), path: ('./resources/taskPhases_9.csv') },
        { name: ('./resources/taskPhases_10.csv'), path: ('./resources/taskPhases_10.csv') },
        { name: ('./resources/conditions_file_0.csv'), path: ('./resources/conditions_file_0.csv') },
        { name: ('./resources/conditions_file_1.csv'), path: ('./resources/conditions_file_1.csv') },
        { name: ('./resources/conditions_file_2.csv'), path: ('./resources/conditions_file_2.csv') },
        { name: ('./resources/conditions_file_3.csv'), path: ('./resources/conditions_file_3.csv') },
        { name: ('./resources/conditions_file_4.csv'), path: ('./resources/conditions_file_4.csv') },
        { name: ('./resources/conditions_file_5.csv'), path: ('./resources/conditions_file_5.csv') },
        { name: ('./resources/conditions_file_6.csv'), path: ('./resources/conditions_file_6.csv') },
        { name: ('./resources/conditions_file_7.csv'), path: ('./resources/conditions_file_7.csv') },
        { name: ('./resources/conditions_file_8.csv'), path: ('./resources/conditions_file_8.csv') },
        { name: ('./resources/conditions_file_9.csv'), path: ('./resources/conditions_file_9.csv') },
        { name: ('./resources/conditions_file_10.csv'), path: ('./resources/conditions_file_10.csv') },
        { name: ('./resources/taskPhases_list.csv'), path: ('./resources/taskPhases_list.csv') }
        ]);

        //
        //condNum = util.randint(0, 1);
        //taskFiles = (("resources/taskPhases_" + condNum.toString()) + ".csv");
  Routine Instructions3
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    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = When the task begins, please remain focused on the cross in the middle of the screen. Use your peripheral vision to attend to the items that appear on screen.
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    KeyboardComponent key_resp_4
      allowedKeys = 'y'
      forceEndRoutine = True
      startVal [time (s)] = 1
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    TextComponent text_5
      letterHeight = 0.05
      pos = (0, -.35)
      startVal [time (s)] = 1
      text = [Press the "y" key to continue]
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  Routine Instructions4
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    TextComponent text_6
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        In this task, you will be remembering images.

        On each trial, will see TWO images, one on the left and one on the right. They will flash on the screen quickly. Do your best to pay equal attention to both images.

        You should try to keep the two images in mind even after they disappear.

        You will be tested on either the left or the right image, but never on both.
    KeyboardComponent key_resp_5
      allowedKeys = 'y'
      forceEndRoutine = True
      startVal [time (s)] = 1
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    TextComponent text_7
      letterHeight = 0.05
      pos = (0, -.4)
      startVal [time (s)] = 1
      text = [Press the "y" key to continue]
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  Routine Instructions5
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    TextComponent text_16
      letterHeight = 0.05
      pos = (0, .3)
      startVal [time (s)] = 0
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      text:
        These cues tell you which image you are being tested on. For example, this cue indicates that you should select which image was originally on the left:
    ImageComponent image
      image = stimuli/cue_left.png
      pos = (0, .15)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    TextComponent text_17
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = This cue indicates that you should select the stimulus that was on the right:
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    ImageComponent image_2
      image = stimuli/cue_right.png
      pos = (0, -.15)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    TextComponent text_18
      letterHeight = 0.05
      pos = (0,-.35)
      startVal [time (s)] = 1
      text = [Press "y" to continue". 
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    KeyboardComponent key_resp_10
      allowedKeys = 'y'
      forceEndRoutine = True
      startVal [time (s)] = 1
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  Routine Instructions5_2
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  Routine Instructions8_2
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  Routine cues_prac
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    ImageComponent left_stim_2
      image [set every repeat] = $left_img
      pos = (-.35, 0)
      size = (0.35, 0.35)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = cue_time
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    ImageComponent right_stim_2
      image [set every repeat] = $right_img
      pos = (.35,0)
      size = (0.35, 0.35)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = cue_time
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    TextComponent fixation_cross_6
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = cue_time
      text = +
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  Routine probe_prac
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    PolygonComponent picker_2
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = -1.0000, -1.0000, -1.0000
      lineWidth = 10
      pos = (2, 2)
      shape = rectangle
      size = (0.26, 0.26)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = probe_time
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    ImageComponent distractor_mem_stim_2
      image [set every repeat] = $distractor_stim
      pos [set every repeat] = (dismem_x, dismem_y)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = probe_time
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  Routine repeat_practice_code
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    TextComponent repeat_prac_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        You made too many incorrect responses during the practice.

        Please try the practice again before moving on to the main experiment.

        Press 'y' to continue.
    KeyboardComponent key_resp_12
      allowedKeys = 'y'
      forceEndRoutine = True
      startVal [time (s)] = 1
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    CodeComponent code_5
      Code Type = JS
      Begin JS Routine:
        mean_perf = mean_performance.reduce((a, b) => a + b) / mean_performance.length

        console.log('\nepoch summaries\n')
        console.log(mean_performance)
        console.log(mean_perf)
        console.log(mean_performance.length)

        //check if practice and mean accuracy is below a threshold
        if (mean_perf < .6 && taskPhase == 'practice') {
            console.log('repeating practice');
            mean_performance = [];
            }
        else if (mean_perf < .6 && taskPhase == 'demo') {
            console.log('repeating demo');
            mean_performance = [];
            }
        else {
            continueRoutine = false;
            repeat_practice.finished = true;
        };
  Routine correct_answer
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  Routine correct_ans
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    PolygonComponent correct_border
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = -0.5294, 0.4039, -0.1137
      lineWidth = 10
      pos [set every repeat] = (mem_x, mem_y)
      shape = rectangle
      size = (0.26, 0.26)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    ImageComponent distractor_mem_stim_3
      image [set every repeat] = $distractor_stim
      pos [set every repeat] = (dismem_x, dismem_y)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    ImageComponent memoranda_stim_2
      image [set every repeat] = $mem_stim
      pos [set every repeat] = (mem_x, mem_y)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    ImageComponent distractor_im
      image [set every repeat] = $distractor_0
      pos [set every repeat] = (dis0_x, dis0_y)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    ImageComponent distractor_im_4
      image [set every repeat] = $distractor_1
      pos [set every repeat] = (dis1_x, dis1_y)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    ImageComponent distractor_im_5
      image [set every repeat] = $distractor_2
      pos [set every repeat] = (dis2_x, dis2_y)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    ImageComponent distractor_im_6
      image [set every repeat] = $distractor_2
      pos [set every repeat] = (dis2_x, dis2_y)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    ImageComponent distractor_im_7
      image [set every repeat] = $distractor_3
      pos [set every repeat] = (dis3_x, dis3_y)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    ImageComponent mem_cue_2
      image [set every repeat] = $cue_img
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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  Routine Instructions6
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    TextComponent text_20
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        After you see the two images, you will see a screen with 6 images to select between. Click on the image that was presented on the side of the screen that the arrow is pointing to. For example, if the arrow points left, click the image that was presented on the left side.

        After you make your response, a green box will highlight the correct answer.
    KeyboardComponent key_resp_13
      allowedKeys = 'y'
      forceEndRoutine = True
      startVal [time (s)] = 1
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    CodeComponent code_7
      Code Type = JS
      Begin JS Routine:
        mean_performance = [];
    TextComponent text_21
      letterHeight = 0.05
      pos = (0, -.35)
      startVal [time (s)] = 1
      text = [Press the "y" key to continue]
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  Routine repeat_code
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    TextComponent repeat_prac_text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        You made too many incorrect responses during the practice.

        Remember, the arrows indicate the side where the image you are being tested on was originally presented. Click on that image regardless of where on the screen it is during the test.

        Please try the practice again before moving on to the main experiment.

        Press 'y' to continue.
    KeyboardComponent key_resp_14
      allowedKeys = 'y'
      forceEndRoutine = True
      startVal [time (s)] = 1
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    CodeComponent code_6
      Code Type = JS
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      Begin JS Routine:
        mean_perf = mean_performance.reduce((a, b) => a + b) / mean_performance.length

        console.log('\nepoch summaries\n')
        console.log(mean_performance)
        console.log(mean_perf)
        console.log(mean_performance.length)

        //check if practice and mean accuracy is below a threshold
        if (mean_perf < .8) {
            console.log('repeating practice');
            mean_performance = [];
            }
        else {
            continueRoutine = false;
            repeat_prac.finished = true;
        };
  Routine Instructions10
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    TextComponent text_13
      letterHeight = 0.05
      pos = (0, .25)
      startVal [time (s)] = 0.0
      text = This symbol indicates that the right image is MUCH more likely than the left image to be tested. 
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    PolygonComponent fill_rectangle_7
      fillColor = 0.0000, 0.0000, 0.0000
      lineWidth = 2
      pos = (0, .1)
      shape = rectangle
      size [set every repeat] = (rec_length, 0.05)
      startVal [time (s)] = 0.0
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    PolygonComponent right_cue3_3
      fillColor = white
      pos = (0.075625, .1)
      shape = rectangle
      size = (0.15125, 0.049)
      startVal [time (s)] = 0.0
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    PolygonComponent left_cue3_3
      fillColor = white
      pos = (-0.006875, .1)
      shape = rectangle
      size = (0.01375, 0.049)
      startVal [time (s)] = 0.0
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    PolygonComponent dividing_line_6
      fillColor = 0.3255, 0.3255, 0.3255
      lineColor = 0.3255, 0.3255, 0.3255
      lineWidth = 2
      ori = 90
      pos = (0, .1)
      shape = line
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent text_14
      letterHeight = 0.05
      pos = (0, -.1)
      startVal [time (s)] = 0.0
      text = This symbol indicates that the right image is SOMEWHAT more likely than the left image to be tested. 
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    PolygonComponent fill_rectangle_8
      fillColor = 0.0000, 0.0000, 0.0000
      lineWidth = 2
      pos = (0, -.25)
      shape = rectangle
      size [set every repeat] = (rec_length, 0.05)
      startVal [time (s)] = 0.0
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    PolygonComponent right_cue3_4
      fillColor = white
      pos = (0.048125, -.25)
      shape = rectangle
      size = (0.09625, 0.049)
      startVal [time (s)] = 0.0
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    PolygonComponent left_cue3_4
      fillColor = white
      pos = (-0.034375, -.25)
      shape = rectangle
      size = (0.06875, 0.049)
      startVal [time (s)] = 0.0
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    PolygonComponent dividing_line_5
      fillColor = 0.3255, 0.3255, 0.3255
      lineColor = 0.3255, 0.3255, 0.3255
      lineWidth = 2
      ori = 90
      pos = (0, -.25)
      shape = line
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_9
      allowedKeys = 'y'
      forceEndRoutine = True
      startVal [time (s)] = 1
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    TextComponent text_15
      letterHeight = 0.05
      pos = (0, -.35)
      startVal [time (s)] = 1
      text = [Press 'y' to continue]
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    CodeComponent code_16
      Code Type = JS
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      Begin JS Experiment:
        //taskphases = (("taskphases_" + psydata.toString()) + ".csv");
        //psydata += 1;
        //save_path = "subject_number.txt";
        //psydata.saveAsWideText(save_path);
        //

        //const randomNumber = getRandomInt(2);
        //
        flag_for_loop = 0;
  Routine Instructions9
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    TextComponent text_10
      letterHeight = 0.05
      pos = (0, .3)
      startVal [time (s)] = 0.0
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      text:
        You will see four different symbols:

        This one, which you just saw, indicates that the left image is MUCH more likely than the right image to be tested.
    PolygonComponent fill_rectangle_5
      fillColor = 0.0000, 0.0000, 0.0000
      lineWidth = 2
      pos = (0, .1)
      shape = rectangle
      size [set every repeat] = (rec_length, 0.05)
      startVal [time (s)] = 0.0
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    PolygonComponent right_cue3
      fillColor = white
      pos = (.006875, .1)
      shape = rectangle
      size = (0.01375, 0.049)
      startVal [time (s)] = 0.0
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    PolygonComponent left_cue3
      fillColor = white
      pos = (-0.075625, .1)
      shape = rectangle
      size = (0.15125, 0.049)
      startVal [time (s)] = 0.0
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    PolygonComponent dividing_line_3
      fillColor = 0.3255, 0.3255, 0.3255
      lineColor = 0.3255, 0.3255, 0.3255
      lineWidth = 2
      ori = 90
      pos = (0, .1)
      shape = line
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent text_11
      letterHeight = 0.05
      pos = (0, -.1)
      startVal [time (s)] = 0.0
      text = This symbol indicates that the left image is SOMEWHAT more likely than the right image to be tested. 
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    PolygonComponent fill_rectangle_6
      fillColor = 0.0000, 0.0000, 0.0000
      lineWidth = 2
      pos = (0, -.25)
      shape = rectangle
      size [set every repeat] = (rec_length, 0.05)
      startVal [time (s)] = 0.0
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    PolygonComponent right_cue3_2
      fillColor = white
      pos = (0.034375, -.25)
      shape = rectangle
      size = (0.06875, 0.049)
      startVal [time (s)] = 0.0
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    PolygonComponent left_cue3_2
      fillColor = white
      pos = (-0.048125, -.25)
      shape = rectangle
      size = (0.09625, 0.049)
      startVal [time (s)] = 0.0
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    PolygonComponent dividing_line_4
      fillColor = 0.3255, 0.3255, 0.3255
      lineColor = 0.3255, 0.3255, 0.3255
      lineWidth = 2
      ori = 90
      pos = (0, -.25)
      shape = line
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_8
      allowedKeys = 'y'
      forceEndRoutine = True
      startVal [time (s)] = 1
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    TextComponent text_12
      letterHeight = 0.05
      pos = (0, -.35)
      startVal [time (s)] = 1
      text = [Press 'y' to continue]
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  Routine Instructions8
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    TextComponent text_8
      letterHeight = 0.05
      pos = (0, .065)
      startVal [time (s)] = 0.0
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      text:
        Take a look at this example. Most of the left side of the rectangle is filled in, indicating a higher probability that the left image will be tested.



        A small portion of the right side of the rectangle is filled in. This means there is a small possibility that the right image will be tested.

        This information can help you perform the task.
    KeyboardComponent key_resp_6
      allowedKeys = 'y'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    PolygonComponent fill_rectangle2
      fillColor = 0.0000, 0.0000, 0.0000
      lineWidth = 2
      pos = (0, .1)
      shape = rectangle
      size [set every repeat] = (rec_length, 0.05)
      startVal [time (s)] = 0.0
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    PolygonComponent right_cue2
      fillColor = white
      pos = (0.006875, .1)
      shape = rectangle
      size = (.01375, 0.049)
      startVal [time (s)] = 0.0
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    PolygonComponent left_cue_2
      fillColor = white
      pos = (-0.075625, .1)
      shape = rectangle
      size = (.15125, 0.049)
      startVal [time (s)] = 0.0
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    PolygonComponent dividing_line_2
      fillColor = 0.3255, 0.3255, 0.3255
      lineColor = 0.3255, 0.3255, 0.3255
      lineWidth = 2
      ori = 90
      pos = (0, .1)
      shape = line
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_7
      allowedKeys = 'y'
      forceEndRoutine = True
      startVal [time (s)] = 1
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    TextComponent text_9
      letterHeight = 0.05
      pos = (0, -.4)
      startVal [time (s)] = 1
      text = [Press 'y' to continue]
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  Routine Instructions7
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    TextComponent text_22
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        After you see the two images, a cue will appear that will tell you whether it is more likely that the stimulus on the left or the right will be tested.

        You can use this information to help you perform the task well.
    KeyboardComponent key_resp_15
      allowedKeys = 'y'
      forceEndRoutine = True
      startVal [time (s)] = 1
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    TextComponent text_23
      letterHeight = 0.05
      pos = (0, -.35)
      startVal [time (s)] = 1
      text = [Press 'y' to continue]
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  Routine Instructions6b
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    TextComponent text_25
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Get ready to try a few example trials.

        Remember, the arrows point to where the image you are being tested on was originally presented. Click on that image regardless of where on the screen it is during the test.

        It takes a little practice to get used to the task rules. You may neeed to perform the following practice several times. This is perfectly normal. The practice will automatically restart until you respond correctly to enough of the trials.
    KeyboardComponent key_resp_16
      allowedKeys = 'y'
      forceEndRoutine = True
      startVal [time (s)] = 1
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    TextComponent text_26
      letterHeight = 0.05
      pos = (0,-.4)
      startVal [time (s)] = 1
      text = [Press "y" to continue". 
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  Routine Instructions
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    TextComponent Instructions_to_image_memory_test
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300
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      text:
        This is the final part of the experiment. You will now see 240 images, each will be presented for 3 seconds and you need to click 1,2,3,4 to answer a question if you have seen the image overall in the experiment or not. 1 - Definitely have not seen, 2 - Probably have not seen, 3 - Probably have seen, 4 - Definitely have seen.

        Once ready please click 'y'.
    KeyboardComponent key_resp_17
      allowedKeys = 'y'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine image_recall_task
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    ImageComponent image_input
      image [set every repeat] = $ImagePath
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent image_recall_response
      allowedKeys = '1','2','3','4'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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    CodeComponent code_8
      Code Type = JS
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      Begin JS Routine:
        corner = [(-0.45), (- 0.45)];
        colours = (["white"] * 4);
        text_colours = (["black"] * 4);
        number_list = [1, 2, 3, 4];
        let number1;
        labels = ["Definitely Not Seen", "Probably Not Seen", "Probably Seen", "Definitely Seen"];
        stimuli = [];

        for (var i, _pj_c = 0, _pj_a = util.range(number_list.length), _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
          i = _pj_a[_pj_c];
          number1 = number_list[i];
          let x_pos = (corner[0] + (i * 0.3));
          let y_pos = (corner[1] + 0.05);
          let w = psychoJS.window;
          let rect = new visual.Rect({win: psychoJS.window, size: [0.3, 0.3], pos: [x_pos, y_pos], fillColor: "black", name: `${colours[i]}_${number1}`});
          let text = new visual.TextStim({win: psychoJS.window, text: number1.toString(), height: 0.1, color: text_colours[i], pos: [x_pos, y_pos]});
          let label = new visual.TextStim({win: psychoJS.window, text: labels[i], height: 0.03, color: text_colours[i], pos: [x_pos, (y_pos + 0.1)]});
          stimuli.push(rect, text, label);
        }
      Each JS Frame:
        //console.log(stimuli);

        for (var stimulus, _pj_c = 0, _pj_a = stimuli, _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
             stimulus = _pj_a[_pj_c];
             stimulus.draw(true);
            }
      End JS Routine:
        for (var stimulus, _pj_c = 0, _pj_a = stimuli, _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
             stimulus = _pj_a[_pj_c];
             stimulus.setAutoDraw(false);
            }
    CodeComponent code_11
      Code Type = JS
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      Begin JS Experiment:
        var minimumDisplayTime = 3.0;
        var startTime;
      Begin JS Routine:
        startTime = psychoJS.monotonicClock.getTime();
      Each JS Frame:
        if (typeof minimumDisplayTime === 'undefined') {
          minimumDisplayTime = 3.0; // Redefine if not recognized
        }
        let currentTime = psychoJS.monotonicClock.getTime();
        // Calculate the elapsed time since the routine started
        let elapsedTime = currentTime - startTime;

        // Get keys if the minimum display time has passed
        if (elapsedTime >= minimumDisplayTime) {
            let keys = psychoJS.eventManager.getKeys({keyList: ['1', '2', '3', '4']});
            if (keys.length > 0) {
                // If a key is pressed after the minimum display time, end the routine
                continueRoutine = false;
            }
        }

        // Ensure the routine continues for at least 3 seconds, regardless of key presses
        if (elapsedTime < minimumDisplayTime) {
            continueRoutine = true;
        }
  Routine small_break
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    TextComponent text_27
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine break_3
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    TextComponent break_txt_final_1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = break text 
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    CodeComponent code_10
      Code Type = JS
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      Begin JS Routine:
        //skip break if it's not a break trial
        if (final_experiment_trials != 4) {
            continueRoutine = false;
            final_experiment_trials = final_experiment_trials+1;
        }
        else {
            //otherwise update break text
            final_experiment_trials = 0;
            break_txt_final_1.text = "You can now take a short break.\n\n Please keep your break under 5 minutes. \n\n Press 'SPACE' to resume the experiment.";
        };
    KeyboardComponent key_resp_19
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300
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  Routine break_2
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    TextComponent break_txt_final
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300
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      text:
        Any text

        including line breaks
    CodeComponent code_9
      Code Type = JS
      Before JS Experiment:
        final_experiment_trials = 0;
      Begin JS Routine:
        //skip break if it's not a break trial
        if (final_experiment_trials != 74) {
            continueRoutine = false;
            final_experiment_trials = final_experiment_trials+1;
        }
        else {
            //otherwise update break text
            final_experiment_trials = 0;
            break_txt_final.text = "You can now take a short break.\n\n Please keep your break under 5 minutes. \n\n Press 'SPACE' to resume the experiment.";
        };
    KeyboardComponent key_resp_18
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300
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  Routine questionaire
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    CodeComponent code_12
      Code Type = JS
      Begin JS Routine:
        if (psychoJS.experiment.isOnline) {
            const url = "$questionnaires.html";
            window.location.href = url + `?subject_id=${psychoJS.experiment.subjectID}&sona_id=${psychoJS.experiment.sonaID}`;
        } else {
            console.log("Redirect only works online.");
        }
  Routine cancel
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    CodeComponent code_13
      Code Type = JS
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      Begin JS Routine:
        //
        //if task == 'trials':
        //continueRoutine = false;
        //
  Routine code_csv
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    CodeComponent code_14
      Code Type = JS
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      Begin JS Experiment:
        import * as pd from 'pandas';
        import * as np from 'numpy';
        import * as op from 'os/path';
        import * as os from 'os';
        import * as sns from 'seaborn';
        import * as glob from 'glob';
        import {Image} from 'PIL';
        import * as imagehash from 'imagehash';
  Routine csv_update
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    CodeComponent code_15
      Code Type = JS
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      Begin JS Experiment:
        //import * as pd from 'pandas';
        //import * as np from 'numpy';
        //import * as op from 'os/path';
        //import * as os from 'os';
        //import * as sns from 'seaborn';
        //import * as glob from 'glob';
        //import {Image} from 'PIL';
        //import * as imagehash from 'imagehash';
        //conditions_file_path = "conditions_file.csv";
        //df = pd.read_csv(conditions_file_path);
        //console.log(df.head());
        //fixed_columns = df[["trial", "attend", "reliability", "validity", "test_item", "stim_side"]];
        //other_columns = df.drop({"columns": ["trial", "attend", "reliability", "validity", "test_item", "stim_side"]});
        //shuffled_other_columns = other_columns.sample({"frac": 1}).reset_index({"drop": true});
        //result_df = pd.concat([fixed_columns, shuffled_other_columns], {"axis": 1});
        //result_df.to_csv("temp_conditions.csv", {"index": false});
        //df = result_df;
        //n_stims = 6;
        //choice_radius = 0.35;
        //ntrials = 300;
        //rec_length = 0.33;
        //reliability_to_rec_length = {[util.round((5 / 6), 2)]: (11 / 12), [util.round((1 / 6), 2)]: (1 / 12), [util.round((2 / 3), 2)]: (7 / 12), [util.round((1 / 3), 2)]: (5 / 12)};
        //attend_direction = [];
        //right_cue_opacity = [];
        //left_cue_opacity = [];
        //left_img = [];
        //right_img = [];
        //for (var i, _pj_c = 0, _pj_a = util.range(df.length), _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
        //    i = _pj_a[_pj_c];
        //    side = df.loc[[i, "stim_side"]];
        //    img1 = df.loc[[i, "img1"]];
        //    img2 = df.loc[[i, "img2"]];
        //    if ((side === 1)) {
        //        left_img.push(img1);
        //        right_img.push(img2);
        //    } else {
        //        left_img.push(img2);
        //        right_img.push(img1);
        //    }
        //}
        //df["left_img"] = left_img;
        //df["right_img"] = right_img;
        //attend_direction = [];
        //right_cue_opacity = [];
        //left_cue_opacity = [];
        //for (var i, _pj_c = 0, _pj_a = util.range(df.length), _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
        //    i = _pj_a[_pj_c];
        //    attend = df.loc[[i, "attend"]];
        //    side = df.loc[[i, "stim_side"]];
        //    reliability = df.loc[[i, "reliability"]];
        //    if ((attend === "img2")) {
        //        if ((side === 1)) {
        //            attend_direction.push("right");
        //            right_cue_opacity.push(reliability_to_rec_length[util.round(reliability, 2)]);
        //            left_cue_opacity.push(reliability_to_rec_length[util.round((1 - reliability), 2)]);
        //        } else {
        //            attend_direction.push("left");
        //            right_cue_opacity.push(reliability_to_rec_length[util.round((1 - reliability), 2)]);
        //            left_cue_opacity.push(reliability_to_rec_length[util.round(reliability, 2)]);
        //        }
        //    } else {
        //        if ((attend === "img1")) {
        //            if ((side === 1)) {
        //                attend_direction.push("left");
        //                right_cue_opacity.push(reliability_to_rec_length[util.round((1 - reliability), 2)]);
        //                left_cue_opacity.push(reliability_to_rec_length[util.round(reliability, 2)]);
        //            } else {
        //                attend_direction.push("right");
        //                right_cue_opacity.push(reliability_to_rec_length[util.round(reliability, 2)]);
        //                left_cue_opacity.push(reliability_to_rec_length[util.round((1 - reliability), 2)]);
        //            }
        //        }
        //    }
        //}
        //df["right_cue_length"] = ((np.array(right_cue_opacity) * rec_length) / 2.0);
        //df["left_cue_length"] = ((np.array(left_cue_opacity) * rec_length) / 2.0);
        //df["right_cue_offset"] = function () {
        //    var _pj_a = [], _pj_b = df["right_cue_length"];
        //    for (var _pj_c = 0, _pj_d = _pj_b.length; (_pj_c < _pj_d); _pj_c += 1) {
        //        var x = _pj_b[_pj_c];
        //        _pj_a.push((x / 2));
        //    }
        //    return _pj_a;
        //}
        //.call(this);
        //df["left_cue_offset"] = function () {
        //    var _pj_a = [], _pj_b = df["left_cue_length"];
        //    for (var _pj_c = 0, _pj_d = _pj_b.length; (_pj_c < _pj_d); _pj_c += 1) {
        //        var x = _pj_b[_pj_c];
        //        _pj_a.push((((- 1) * x) / 2));
        //    }
        //    return _pj_a;
        //}
        //.call(this);
        //df["attend_direction"] = attend_direction;
        //df["rec_length"] = rec_length;
        //triplets = pd.read_csv("./triplets.csv");
        //df["root"] = function () {
        //    var _pj_a = [], _pj_b = df["ping_img"];
        //    for (var _pj_c = 0, _pj_d = _pj_b.length; (_pj_c < _pj_d); _pj_c += 1) {
        //        var x = _pj_b[_pj_c];
        //        _pj_a.push(x.split("/").slice((- 1))[0]);
        //    }
        //    return _pj_a;
        //}
        //.call(this);
        //df = pd.merge(df, triplets, {"on": ["root"]});
        //position = [];
        //for (var i, _pj_c = 0, _pj_a = util.range((n_stims + 2)), _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
        //    i = _pj_a[_pj_c];
        //    theta = (i * ((2 * np.pi) / (n_stims + 2)));
        //    position.push([np.round(((choice_radius * np.cos(theta)) * 1.5), 2), np.round((choice_radius * np.sin(theta)), 2)]);
        //}
        //position = function () {
        //    var _pj_a = [], _pj_b = position;
        //    for (var _pj_c = 0, _pj_d = _pj_b.length; (_pj_c < _pj_d); _pj_c += 1) {
        //        var x = _pj_b[_pj_c];
        //        if ((x[1] !== 0)) {
        //            _pj_a.push(x);
        //        }
        //    }
        //    return _pj_a;
        //}
        //.call(this);
        //for (var i, _pj_c = 0, _pj_a = util.range(ntrials), _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
        //    i = _pj_a[_pj_c];
        //    np.random.shuffle(position);
        //    df.loc[[i, "mem_x"]] = position[0][0];
        //    df.loc[[i, "mem_y"]] = position[0][1];
        //    df.loc[[i, "dismem_x"]] = position[1][0];
        //    df.loc[[i, "dismem_y"]] = position[1][1];
        //    for (var j, _pj_f = 0, _pj_d = util.range((n_stims - 2)), _pj_e = _pj_d.length; (_pj_f < _pj_e); _pj_f += 1) {
        //        j = _pj_d[_pj_f];
        //        df.loc[[i, (("dis" + j.toString()) + "_x")]] = position[(j + 2)][0];
        //        df.loc[[i, (("dis" + j.toString()) + "_y")]] = position[(j + 2)][1];
        //    }
        //}
        //mem_stim = [];
        //distractor_stim = [];
        //for (var i, _pj_c = 0, _pj_a = util.range(df.length), _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
        //    i = _pj_a[_pj_c];
        //    im1 = df.loc[[i, "img1"]];
        //    im2 = df.loc[[i, "img2"]];
        //    test_item = df.loc[[i, "test_item"]];
        //    if ((test_item === "img1")) {
        //        mem_stim.push(im1);
        //        distractor_stim.push(im2);
        //    } else {
        //        if ((test_item === "img2")) {
        //            mem_stim.push(im2);
        //            distractor_stim.push(im1);
        //        }
        //    }
        //}
        //df["mem_stim"] = mem_stim;
        //df["distractor_stim"] = distractor_stim;
        //probe_direction = [];
        //cue_img = [];
        //for (var i, _pj_c = 0, _pj_a = util.range(df.length), _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
        //    i = _pj_a[_pj_c];
        //    probe = df.loc[[i, "test_item"]];
        //    side = df.loc[[i, "stim_side"]];
        //    if ((probe === "img1")) {
        //        if ((side === 1)) {
        //            probe_direction.push("left");
        //            cue_img.push("./stimuli/cue_left.png");
        //        } else {
        //            probe_direction.push("right");
        //            cue_img.push("./stimuli/cue_right.png");
        //        }
        //    } else {
        //        if ((probe === "img2")) {
        //            if ((side === 1)) {
        //                probe_direction.push("right");
        //                cue_img.push("./stimuli/cue_right.png");
        //            } else {
        //                probe_direction.push("left");
        //                cue_img.push("./stimuli/cue_left.png");
        //            }
        //        }
        //    }
        //}
        //df["probe_direction"] = probe_direction;
        //df["cue_img"] = cue_img;
        //exp_settings = df.sample({"frac": 1});
        //exp_settings.to_csv("conditions_file_new.csv", {"index": false});
        //
      Begin JS Routine:
        import * as pd from 'pandas';
        import * as np from 'numpy';
        import * as op from 'os/path';
        import * as os from 'os';
        import * as sns from 'seaborn';
        import * as glob from 'glob';
        import {Image} from 'PIL';
        import * as imagehash from 'imagehash';
        conditions_file_path = "conditions_file.csv";
        df = pd.read_csv(conditions_file_path);
        console.log(df.head());
        fixed_columns = df[["trial", "attend", "reliability", "validity", "test_item", "stim_side"]];
        other_columns = df.drop({"columns": ["trial", "attend", "reliability", "validity", "test_item", "stim_side"]});
        shuffled_other_columns = other_columns.sample({"frac": 1}).reset_index({"drop": true});
        result_df = pd.concat([fixed_columns, shuffled_other_columns], {"axis": 1});
        result_df.to_csv("temp_conditions.csv", {"index": false});
        df = result_df;
        n_stims = 6;
        choice_radius = 0.35;
        ntrials = 300;
        rec_length = 0.33;
        reliability_to_rec_length = {[util.round((5 / 6), 2)]: (11 / 12), [util.round((1 / 6), 2)]: (1 / 12), [util.round((2 / 3), 2)]: (7 / 12), [util.round((1 / 3), 2)]: (5 / 12)};
        attend_direction = [];
        right_cue_opacity = [];
        left_cue_opacity = [];
        left_img = [];
        right_img = [];
        for (var i, _pj_c = 0, _pj_a = util.range(df.length), _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
            i = _pj_a[_pj_c];
            side = df.loc[[i, "stim_side"]];
            img1 = df.loc[[i, "img1"]];
            img2 = df.loc[[i, "img2"]];
            if ((side === 1)) {
                left_img.push(img1);
                right_img.push(img2);
            } else {
                left_img.push(img2);
                right_img.push(img1);
            }
        }
        df["left_img"] = left_img;
        df["right_img"] = right_img;
        attend_direction = [];
        right_cue_opacity = [];
        left_cue_opacity = [];
        for (var i, _pj_c = 0, _pj_a = util.range(df.length), _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
            i = _pj_a[_pj_c];
            attend = df.loc[[i, "attend"]];
            side = df.loc[[i, "stim_side"]];
            reliability = df.loc[[i, "reliability"]];
            if ((attend === "img2")) {
                if ((side === 1)) {
                    attend_direction.push("right");
                    right_cue_opacity.push(reliability_to_rec_length[util.round(reliability, 2)]);
                    left_cue_opacity.push(reliability_to_rec_length[util.round((1 - reliability), 2)]);
                } else {
                    attend_direction.push("left");
                    right_cue_opacity.push(reliability_to_rec_length[util.round((1 - reliability), 2)]);
                    left_cue_opacity.push(reliability_to_rec_length[util.round(reliability, 2)]);
                }
            } else {
                if ((attend === "img1")) {
                    if ((side === 1)) {
                        attend_direction.push("left");
                        right_cue_opacity.push(reliability_to_rec_length[util.round((1 - reliability), 2)]);
                        left_cue_opacity.push(reliability_to_rec_length[util.round(reliability, 2)]);
                    } else {
                        attend_direction.push("right");
                        right_cue_opacity.push(reliability_to_rec_length[util.round(reliability, 2)]);
                        left_cue_opacity.push(reliability_to_rec_length[util.round((1 - reliability), 2)]);
                    }
                }
            }
        }
        df["right_cue_length"] = ((np.array(right_cue_opacity) * rec_length) / 2.0);
        df["left_cue_length"] = ((np.array(left_cue_opacity) * rec_length) / 2.0);
        df["right_cue_offset"] = function () {
            var _pj_a = [], _pj_b = df["right_cue_length"];
            for (var _pj_c = 0, _pj_d = _pj_b.length; (_pj_c < _pj_d); _pj_c += 1) {
                var x = _pj_b[_pj_c];
                _pj_a.push((x / 2));
            }
            return _pj_a;
        }
        .call(this);
        df["left_cue_offset"] = function () {
            var _pj_a = [], _pj_b = df["left_cue_length"];
            for (var _pj_c = 0, _pj_d = _pj_b.length; (_pj_c < _pj_d); _pj_c += 1) {
                var x = _pj_b[_pj_c];
                _pj_a.push((((- 1) * x) / 2));
            }
            return _pj_a;
        }
        .call(this);
        df["attend_direction"] = attend_direction;
        df["rec_length"] = rec_length;
        triplets = pd.read_csv("./triplets.csv");
        df["root"] = function () {
            var _pj_a = [], _pj_b = df["ping_img"];
            for (var _pj_c = 0, _pj_d = _pj_b.length; (_pj_c < _pj_d); _pj_c += 1) {
                var x = _pj_b[_pj_c];
                _pj_a.push(x.split("/").slice((- 1))[0]);
            }
            return _pj_a;
        }
        .call(this);
        df = pd.merge(df, triplets, {"on": ["root"]});
        position = [];
        for (var i, _pj_c = 0, _pj_a = util.range((n_stims + 2)), _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
            i = _pj_a[_pj_c];
            theta = (i * ((2 * np.pi) / (n_stims + 2)));
            position.push([np.round(((choice_radius * np.cos(theta)) * 1.5), 2), np.round((choice_radius * np.sin(theta)), 2)]);
        }
        position = function () {
            var _pj_a = [], _pj_b = position;
            for (var _pj_c = 0, _pj_d = _pj_b.length; (_pj_c < _pj_d); _pj_c += 1) {
                var x = _pj_b[_pj_c];
                if ((x[1] !== 0)) {
                    _pj_a.push(x);
                }
            }
            return _pj_a;
        }
        .call(this);
        for (var i, _pj_c = 0, _pj_a = util.range(ntrials), _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
            i = _pj_a[_pj_c];
            np.random.shuffle(position);
            df.loc[[i, "mem_x"]] = position[0][0];
            df.loc[[i, "mem_y"]] = position[0][1];
            df.loc[[i, "dismem_x"]] = position[1][0];
            df.loc[[i, "dismem_y"]] = position[1][1];
            for (var j, _pj_f = 0, _pj_d = util.range((n_stims - 2)), _pj_e = _pj_d.length; (_pj_f < _pj_e); _pj_f += 1) {
                j = _pj_d[_pj_f];
                df.loc[[i, (("dis" + j.toString()) + "_x")]] = position[(j + 2)][0];
                df.loc[[i, (("dis" + j.toString()) + "_y")]] = position[(j + 2)][1];
            }
        }
        mem_stim = [];
        distractor_stim = [];
        for (var i, _pj_c = 0, _pj_a = util.range(df.length), _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
            i = _pj_a[_pj_c];
            im1 = df.loc[[i, "img1"]];
            im2 = df.loc[[i, "img2"]];
            test_item = df.loc[[i, "test_item"]];
            if ((test_item === "img1")) {
                mem_stim.push(im1);
                distractor_stim.push(im2);
            } else {
                if ((test_item === "img2")) {
                    mem_stim.push(im2);
                    distractor_stim.push(im1);
                }
            }
        }
        df["mem_stim"] = mem_stim;
        df["distractor_stim"] = distractor_stim;
        probe_direction = [];
        cue_img = [];
        for (var i, _pj_c = 0, _pj_a = util.range(df.length), _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
            i = _pj_a[_pj_c];
            probe = df.loc[[i, "test_item"]];
            side = df.loc[[i, "stim_side"]];
            if ((probe === "img1")) {
                if ((side === 1)) {
                    probe_direction.push("left");
                    cue_img.push("./stimuli/cue_left.png");
                } else {
                    probe_direction.push("right");
                    cue_img.push("./stimuli/cue_right.png");
                }
            } else {
                if ((probe === "img2")) {
                    if ((side === 1)) {
                        probe_direction.push("right");
                        cue_img.push("./stimuli/cue_right.png");
                    } else {
                        probe_direction.push("left");
                        cue_img.push("./stimuli/cue_left.png");
                    }
                }
            }
        }
        df["probe_direction"] = probe_direction;
        df["cue_img"] = cue_img;
        exp_settings = df.sample({"frac": 1});
        exp_settings.to_csv("conditions_file_new.csv", {"index": false});
Flow
  Routine setup_js
  Routine Instructions1
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 1
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    Routine Instructions2
    Routine Instructions3
    Routine Instructions4
    Routine Instructions5
    Routine Instructions6b
    LoopInitiator repeat_prac loopType="TrialHandler"
      loopType = sequential
      nReps = 5
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      Routine Instructions6
      LoopInitiator prac_trials loopType="TrialHandler"
        conditionsFile = initial_practice.csv
        loopType = random
        nReps = 1
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        conditions:
          [OrderedDict([('attend', 'img2'), ('reliability', 0.6666666666666666), ('validity', 'valid'), ('test_item', 'img2'), ('reliability_time', 0), ('cue_time', 2.0), ('delay_1_time', 0.5), ('delay_2_time', 0.5), ('ping_time', 0), ('delay_3_time', 0), ('probe_time', 3.5), ('noise_mask_time', 0), ('iti_dur', 1.0), ('stim_side', 1), ('img1', './stimuli/demo_stims/tricycle_12s.jpg'), ('img2', './stimuli/demo_stims/man_03s.jpg'), ('ping_img', './stimuli/demo_stims/missile_02s.jpg'), ('left_img', './stimuli/demo_stims/tricycle_12s.jpg'), ('right_img', './stimuli/demo_stims/man_03s.jpg'), ('right_cue_leng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,
          OrderedDict([('attend', 'img2'), ('reliability', 0.8333333333333334), ('validity', 'valid'), ('test_item', 'img2'), ('reliability_time', 0), ('cue_time', 2.0), ('delay_1_time', 0.5), ('delay_2_time', 0.5), ('ping_time', 0), ('delay_3_time', 0), ('probe_time', 3.5), ('noise_mask_time', 0), ('iti_dur', 1.0), ('stim_side', 1), ('img1', './stimuli/demo_stims/fire_alarm_16s.jpg'), ('img2', './stimuli/demo_stims/kale_05s.jpg'), ('ping_img', './stimuli/demo_stims/kaleidoscope_09s.jpg'), ('left_img', './stimuli/demo_stims/fire_alarm_16s.jpg'), ('right_img', './stimuli/demo_stims/kale_05s.jpg'), ('righ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,
          OrderedDict([('attend', 'img1'), ('reliability', 0.6666666666666666), ('validity', 'valid'), ('test_item', 'img1'), ('reliability_time', 0), ('cue_time', 2.0), ('delay_1_time', 0.5), ('delay_2_time', 0.5), ('ping_time', 0), ('delay_3_time', 0), ('probe_time', 3.5), ('noise_mask_time', 0), ('iti_dur', 1.0), ('stim_side', -1), ('img1', './stimuli/demo_stims/toilet_paper_02s.jpg'), ('img2', './stimuli/demo_stims/lamb_09s.jpg'), ('ping_img', './stimuli/demo_stims/laser_pointer_08s.jpg'), ('left_img', './stimuli/demo_stims/lamb_09s.jpg'), ('right_img', './stimuli/demo_stims/toilet_paper_02s.jpg'), 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,
          OrderedDict([('attend', 'img1'), ('reliability', 0.6666666666666666), ('validity', 'valid'), ('test_item', 'img1'), ('reliability_time', 0), ('cue_time', 2.0), ('delay_1_time', 0.5), ('delay_2_time', 0.5), ('ping_time', 0), ('delay_3_time', 0), ('probe_time', 3.5), ('noise_mask_time', 0), ('iti_dur', 1.0), ('stim_side', -1), ('img1', './stimuli/demo_stims/gavel_03s.jpg'), ('img2', './stimuli/demo_stims/granola_01b.jpg'), ('ping_img', './stimuli/demo_stims/tweezers_09s.jpg'), ('left_img', './stimuli/demo_stims/granola_01b.jpg'), ('right_img', './stimuli/demo_stims/gavel_03s.jpg'), ('right_cue_l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
        Routine memoranda
        Routine isi1
        Routine probe
        Routine correct_ans
        Routine ITI
      LoopTerminator prac_trials
      Routine repeat_code
    LoopTerminator repeat_prac
    Routine Instructions7
    Routine Instructions8
    Routine Instructions9
    Routine Instructions10
    LoopInitiator trials_3 loopType="TrialHandler"
      conditionsFile = resources/taskPhases_list.csv
      loopType = random
      nReps = 1
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      conditions:
        [OrderedDict([('taskPhases', './resources/taskPhases_0.csv'), ('conditions_choice', 'taskPhases_0')]),
        OrderedDict([('taskPhases', './resources/taskPhases_1.csv'), ('conditions_choice', 'taskPhases_1')]),
        OrderedDict([('taskPhases', './resources/taskPhases_2.csv'), ('conditions_choice', 'taskPhases_2')]),
        OrderedDict([('taskPhases', './resources/taskPhases_3.csv'), ('conditions_choice', 'taskPhases_3')]),
        OrderedDict([('taskPhases', './resources/taskPhases_4.csv'), ('conditions_choice', 'taskPhases_4')]),
        OrderedDict([('taskPhases', './resources/taskPhases_5.csv'), ('conditions_choice', 'taskPhases_5')]),
        OrderedDict([('taskPhases', './resources/taskPhases_6.csv'), ('conditions_choice', 'taskPhases_6')]),
        OrderedDict([('taskPhases', './resources/taskPhases_7.csv'), ('conditions_choice', 'taskPhases_7')]),
        OrderedDict([('taskPhases', './resources/taskPhases_8.csv'), ('conditions_choice', 'taskPhases_8')]),
        OrderedDict([('taskPhases', './resources/taskPhases_9.csv'), ('conditions_choice', 'taskPhases_9')]),
        OrderedDict([('taskPhases', './resources/taskPhases_10.csv'), ('conditions_choice', 'taskPhases_10')])]
      LoopInitiator demo_prac_task loopType="TrialHandler"
        conditionsFile = $taskPhases
        loopType = sequential
        nReps = 1
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        conditions:
          [OrderedDict([('condsFile', './demo.csv'), ('taskPhase', 'demo'), ('introTXT', "Now you will do a few demo trials to get accustomed to the cues.\n\nPress 'y' to continue.")]),
          OrderedDict([('condsFile', './prac.csv'), ('taskPhase', 'practice'), ('introTXT', "Now you will do a few practice trials to get accustomed to the task.\n\nThe practice trials are identical to what you just did except for two changes.\n\nFirst, the task is a bit faster paced.\n\nSecond, after you see the rectangle image telling you which item is more likely to be tested, a new image will briefly flash at the center of the screen. This item is irrelevant to your memory task and can be ignored.\n\nPress 'y' to continue.")]),
          OrderedDict([('condsFile', './conditions_file.csv'), ('taskPhase', 'mainTask'), ('introTXT', "Now you are ready to start the experiment! Try your hardest and remember to focus on the center of the screen. \n\nThere will be ten 5-minute blocks, with a short break between each.\n\nPress 'y' to begin.")])]
        LoopInitiator repeat_practice loopType="TrialHandler"
          loopType = sequential
          nReps = 5
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          Routine intro_txt
          Routine initial_wait
          LoopInitiator loop_trials loopType="TrialHandler"
            conditionsFile = $condsFile
            loopType = random
            nReps = 1
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            conditions:
              [OrderedDict([('trial', 185), ('attend', 'img1'), ('reliability', 0.6666666666666666), ('validity', 'valid'), ('test_item', 'img1'), ('reliability_time', 1.0), ('cue_time', 1.0), ('delay_1_time', 0.5), ('delay_2_time', 0.5), ('ping_time', 0.5), ('delay_3_time', 0.75), ('probe_time', 3.5), ('noise_mask_time', 0.25), ('iti_dur', 1.0), ('stim_side', -1), ('img1', './stimuli/185_2.jpg'), ('img2', './stimuli/185_3.jpg'), ('ping_img', './stimuli/185_1.jpg'), ('left_img', './stimuli/185_3.jpg'), ('right_img', './stimuli/185_2.jpg'), ('right_cue_length', 0.1), ('left_cue_length', 0.05), ('right_cue_of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,
              OrderedDict([('trial', 32), ('attend', 'img1'), ('reliability', 0.6666666666666666), ('validity', 'valid'), ('test_item', 'img1'), ('reliability_time', 1.0), ('cue_time', 1.0), ('delay_1_time', 0.5), ('delay_2_time', 0.5), ('ping_time', 0.5), ('delay_3_time', 0.75), ('probe_time', 3.5), ('noise_mask_time', 0.25), ('iti_dur', 1.0), ('stim_side', 1), ('img1', './stimuli/32_2.jpg'), ('img2', './stimuli/32_3.jpg'), ('ping_img', './stimuli/32_1.jpg'), ('left_img', './stimuli/32_2.jpg'), ('right_img', './stimuli/32_3.jpg'), ('right_cue_length', 0.05), ('left_cue_length', 0.1), ('right_cue_offset', 0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,
              OrderedDict([('trial', 175), ('attend', 'img2'), ('reliability', 0.6666666666666666), ('validity', 'valid'), ('test_item', 'img2'), ('reliability_time', 1.0), ('cue_time', 1.0), ('delay_1_time', 0.5), ('delay_2_time', 0.5), ('ping_time', 0.5), ('delay_3_time', 0.75), ('probe_time', 3.5), ('noise_mask_time', 0.25), ('iti_dur', 1.0), ('stim_side', -1), ('img1', './stimuli/175_2.jpg'), ('img2', './stimuli/175_3.jpg'), ('ping_img', './stimuli/175_1.jpg'), ('left_img', './stimuli/175_3.jpg'), ('right_img', './stimuli/175_2.jpg'), ('right_cue_length', 0.05), ('left_cue_length', 0.1), ('right_cue_off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,
              OrderedDict([('trial', 190), ('attend', 'img2'), ('reliability', 0.8333333333333334), ('validity', 'valid'), ('test_item', 'img2'), ('reliability_time', 1.0), ('cue_time', 1.0), ('delay_1_time', 0.5), ('delay_2_time', 0.5), ('ping_time', 0.5), ('delay_3_time', 0.75), ('probe_time', 3.5), ('noise_mask_time', 0.25), ('iti_dur', 1.0), ('stim_side', -1), ('img1', './stimuli/190_2.jpg'), ('img2', './stimuli/190_3.jpg'), ('ping_img', './stimuli/190_1.jpg'), ('left_img', './stimuli/190_3.jpg'), ('right_img', './stimuli/190_2.jpg'), ('right_cue_length', 0.024999999999999998), ('left_cue_length', 0.125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
            Routine memoranda
            Routine isi1
            Routine reliability_cue
            Routine isi2
            Routine ping
            Routine noise_mask
            Routine isi3
            Routine probe
            Routine block_break
            Routine ITI
          LoopTerminator loop_trials
          Routine repeat_practice_code
        LoopTerminator repeat_practice
      LoopTerminator demo_prac_task
    LoopTerminator trials_3
  LoopTerminator trials
  Routine Instructions
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = selected_and_foils.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('ImagePath', './stimuli/new_foil_stims/cake_mix_12s.jpg')]),
      OrderedDict([('ImagePath', './stimuli/new_foil_stims/chili_06s.jpg')]),
      OrderedDict([('ImagePath', './stimuli/new_foil_stims/motorcycle_05s.jpg')]),
      OrderedDict([('ImagePath', './stimuli/68_1.jpg')]),
      OrderedDict([('ImagePath', './stimuli/new_foil_stims/elephant_03n.jpg')]),
      OrderedDict([('ImagePath', './stimuli/new_foil_stims/onion_04s.jpg')]),
      OrderedDict([('ImagePath', './stimuli/167_3.jpg')]),
      OrderedDict([('ImagePath', './stimuli/294_2.jpg')]),
      OrderedDict([('ImagePath', './stimuli/119_1.jpg')]),
      OrderedDict([('ImagePath', './stimuli/new_foil_stims/projector_07n.jpg')]),
      OrderedDict([('ImagePath', './stimuli/62_3.jpg')]),
      OrderedDict([('ImagePath', './stimuli/new_foil_stims/shawl_01b.jpg')]),
      OrderedDict([('ImagePath', './stimuli/27_1.jpg')]),
      OrderedDict([('ImagePath', './stimuli/new_foil_stims/fishnet_stockings_14s.jpg')]),
      OrderedDict([('ImagePath', './stimuli/166_2.jpg')]),
      OrderedDict([('ImagePath', './stimuli/new_foil_stims/calculator_06s.jpg')]),
      OrderedDict([('ImagePath', './stimuli/178_1.jpg')]),
      OrderedDict([('ImagePath', './stimuli/95_2.jpg')]),
      OrderedDict([('ImagePath', './stimuli/81_2.jpg')]),
      OrderedDict([('ImagePath', './stimuli/new_foil_stims/pug_08s.jpg')]),
      OrderedDict([('ImagePath', './stimuli/158_3.jpg')]),
      OrderedDict([('ImagePath', './stimuli/new_foil_stims/keyboard_09s.jpg')]),
      OrderedDict([('ImagePath', './stimuli/new_foil_stims/parfait_09s.jpg')])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
    Routine image_recall_task
    Routine small_break
    Routine break_2
  LoopTerminator trials_2
  Routine end_exp
